PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['date'], expInfo['participant'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['face_suzuki_smooth_faces/face_suzuki_smooth_0_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_1_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_2_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_3_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_4_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_5_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_6_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_7_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_8_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_9_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_10_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_11_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_12_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_13_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_14_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_15_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_16_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_17_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_18_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_19_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_20_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_21_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_22_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_23_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_24_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_25_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_26_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_27_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_28_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_29_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_30_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_31_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_32_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_33_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_34_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_35_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_36_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_37_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_38_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_39_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_40_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_41_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_42_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_43_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_44_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_45_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_46_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_47_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_48_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_49_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_50_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_51_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_52_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_53_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_54_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_55_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_56_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_57_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_58_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_59_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_60_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_61_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_62_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_63_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_64_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_65_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_66_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_67_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_68_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_69_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_70_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_71_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_72_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_73_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_74_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_75_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_76_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_77_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_78_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_79_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_80_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_81_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_82_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_83_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_84_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_85_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_86_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_87_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_88_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_89_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_90_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_91_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_92_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_93_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_94_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_95_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_96_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_97_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_98_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_99_face.png', 'face_suzuki_smooth_faces/face_suzuki_smooth_100_face.png']
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = pix
  Use version = 2022.1.4
  Window size (pixels) = [1280, 800]
  expName = staircase_SuzukiRaki_face
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        current_blend = 100
        correct_counter = 0
        incorrect_counter = 0
        step_sizes = [64, 32, 16, 8, 4, 2, 1]
        step_index = 0
        is_target_blended = True  # 加工画像がターゲットか
      Begin Routine:
        # ランダムに画像タイプを選択（50%で加工 or 非加工）
        is_target_blended = (randint(0, 2) == 1)

        # blend値を計算
        if is_target_blended:
            blend_ratio = current_blend
            correctAns = 'y'
        else:
            blend_ratio = 0
            correctAns = 'n'

        # ファイル名を手動でゼロ埋めして作成（Auto→JS対応）
        blend_str = "%03d" % blend_ratio
        image_file = "face_suzuki_smooth_faces/face_suzuki_smooth_" + blend_str + "_face.png"

        # 出力csvファイルへの保存
        thisExp.addData("correctAns", correctAns)
        thisExp.addData("current_blend", current_blend)
        thisExp.addData("blend_ratio", blend_ratio)
        thisExp.addData("image_file", image_file)
      End Routine:
        # 正誤判定（例：y＝加工、n＝非加工）
        if (key_resp.keys == 'y' and is_target_blended) or (key_resp.keys == 'n' and not is_target_blended):
            correct_counter += 1
            incorrect_counter = 0
            iscorrect = True
        else:
            incorrect_counter += 1
            correct_counter = 0
            iscorrect = False

        # ステアケース処理
        if correct_counter >= 3:
            step_index = min(step_index, len(step_sizes) - 1)
            current_blend = max(1, current_blend - step_sizes[step_index])
            correct_counter = 0
            step_index = step_index + 1
        elif incorrect_counter >= 1:
            step_index = min(step_index, len(step_sizes) - 1)
            current_blend = min(100, current_blend + step_sizes[step_index])
            incorrect_counter = 0
            step_index = step_index + 1

        # 結果表示用（オプション）
        text_display = ('正解' if iscorrect else '不正解')
    PolygonComponent polygon_1
      fillColor = white
      shape = rectangle
      size = (3.0, 10.0)
      startVal [frame N] = 20
      units = pix
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    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size = (10.0, 3.0)
      startVal [frame N] = 20
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [frame N] = 20
      storeCorrect = True
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    ImageComponent image_face
      image [set every repeat] = $image_file
      size = (720.0, 960.0)
      startVal [frame N] = 20
      stopVal [duration (frames)] = 30
      units = pix
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  Routine instruction
    TextComponent text
      letterHeight = 24
      startVal [frame N] = 0.0
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      text:
        これから、いくつかの顔画像が表示されます。

        肌がきれいに見えるように加工されているかを判定してください。
        加工されていると思ったら → yキー（yes）
        加工されていないと思ったら → nキー（no）

        加工されている画像と加工されていない画像は等確率で出現します。

        実験中は中央の十字を見続けてください。

        スペースキーを押すと実験が開始されます。
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine feedback
    TextComponent text_2
      letterHeight = 24
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 20
      text [set every repeat] = $text_display
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 80
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    Routine trial
    Routine feedback
  LoopTerminator trials
